// creator: Family Nunns; Given Geoff; gnunns1@jhu.edu; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// created: W3CDTF 2010-04-29
// reference: subject_type keyword; metabolism; glycolysis; yeast
// reference: Family Malys; Given Naglis; Family Messiha; Given Hanan; Family Carroll; Given Kathleen; Family Dunn; Given Warwick; Family Khan; Given Farid; Family Hayes; Given Neil; Family Pir; Given Pinar; Family Simeonidis; Given Evangelos; Family Smallbone; Given Kieran; Family Spasic; Given Irena; Family Swainston; Given Neil; Family Jameson; Given Daniel; Family Villeger; Given Alice; Family Weichart; Given Dieter; Family Winder; Given Cate; Family Wishart; Given Jill; Family Broomhead; Given David; Family Gaskell; Given Simon; Family Kell; Given Douglas; Family McCarthy; Given John; Family Oliver; Given Stephen; Family Paton; Given Norman; Family Westerhoff; Given Hans; Family Mendes; Given Pedro; title A systems biology pipeline for biochemical networks, and its application to yeast glycolysis
def model malys_2010 as
  // A systems biology pipeline for biochemical networks, and its application to yeast glycolysis
  //
  // Geoff Nunns
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in OpenCell and COR to reproduce the results of the original model. The CellML translation was based on the original SBML code supplied by the model authors. The units have been checked and they are consistent.
  //
  // Model Structure
  //
  // ABSTRACT:
  //
  // model diagram
  //
  // Schematic diagram of the glycolysis pathway described by the model.
  //
  // The original paper reference is cited below:
  //
  // A systems biology pipeline for biochemical networks, and its application to yeast glycolysis, Naglis Malys, Hanan Messiha, Kathleen Carroll, Warwick Dunn, Farid Khan, Neil W. Hayes, Pinar Pir, Evangelos Simeonidis, Kieran Smallbone, Irena Spasic, Neil Swainston, Daniel Jameson, Alice Villeger, Dieter Weichart, Cate Winder, Jill Wishart, David S. Broomhead, Simon J. Gaskell, Douglas B. Kell, John E.G. McCarthy, Stephen G. Oliver, Norman Paton, Hans V. Westerhoff and Pedro Mendes, 2010,
  //
  // <emphasis>Free Radical Biology and Medicine</emphasis> , 42, 811-822. <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&amp;cmd=Retrieve&amp;dopt=AbstractPlus&amp;list_uids=17320763&amp;query_hl=1&amp;itool=pubmed_docsum">PubMed ID: 17320763</ulink>
  def unit mM as
    unit mole {pref: -3};
    unit litre {expo: -1};
  enddef;
  def unit mM_per_second as
    unit mole {pref: -3};
    unit litre {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mmol_per_second as
    unit mole {pref: -3};
    unit second {expo: -1};
  enddef;
  def unit per_mM_per_second as
    unit mole {pref: -3, expo: -1};
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit per_mM_squared_per_second as
    unit mole {pref: -3, expo: -2};
    unit litre {expo: 2};
    unit second {expo: -1};
  enddef;
  def unit per_mmol as
    unit mole {pref: -3, expo: -1};
  enddef;
  def unit per_second as
    unit second {expo: -1};
  enddef;
  def unit item as
    unit mole {expo: -24, mult: 1.66053878233550918318605};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp parameters as
    var cell_volume: litre {init: 2.155e-14, pub: out};
    var Kacald_adh: mM {init: 1.11, pub: out};
    var Kadp_hxk: mM {init: 0.23, pub: out};
    var Katp_pyk: mM {init: 1.5, pub: out};
    var Kbpg_tdh: mM {init: 0.909, pub: out};
    var kcat_adh: per_second {init: 112.3, pub: out};
    var Keq_adh: dimensionless {init: 6.9e-5, pub: out};
    var Keq_gpm: dimensionless {init: 0.19, pub: out};
    var Keq_hxk: dimensionless {init: 2000, pub: out};
    var Keq_tdh: dimensionless {init: 0.005334, pub: out};
    var Ketoh_adh: mM {init: 17, pub: out};
    var Kg6p_hxk: mM {init: 30, pub: out};
    var Kiacald_adh: mM {init: 1.1, pub: out};
    var Kietoh_adh: mM {init: 90, pub: out};
    var Kinad_adh: mM {init: 0.92, pub: out};
    var Kinadh_adh: mM {init: 0.031, pub: out};
    var Knad_adh: mM {init: 0.17, pub: out};
    var Knad_tdh: mM {init: 0.09, pub: out};
    var Knadh_adh: mM {init: 0.11, pub: out};
    var Knadh_tdh: mM {init: 0.06, pub: out};
    var Kp2g_gpm: mM {init: 0.08, pub: out};
    var N_A: per_mmol {init: 6.02214179e20, pub: out};
    var percentage_cell_wall: dimensionless {init: 21.8, pub: out};
    var percentage_cytoplasm: dimensionless {init: 47.5, pub: out};
  enddef;

  def comp cytoplasm as
    var c_1: litre {init: 1.023625e-14, pub: out};
    var x_01: mM {init: 0.329796102, pub: out};
    var x_02: mM {init: 0.005534, pub: out};
    var x_03: mM {init: 0.1781, pub: out};
    var x_04: mM {init: 1.138794213, pub: out};
    var x_05: mM {init: 0.655861111, pub: out};
    var x_06: mM {init: 4.394577666, pub: out};
    var x_08: mM {init: 2.045611826, pub: out};
    var x_09: mM {init: 0.02, pub: out};
    var x_10: mM {init: 0.114998749, pub: out};
    var x_11: mM {init: 2.728563911, pub: out};
    var x_12: mM {init: 0.484555315, pub: out};
    var x_13: mM {init: 0.047547092, pub: out};
    var x_14: mM {init: 1.072770104, pub: out};
    var x_15: mM {init: 108.3801159, pub: out};
    var x_16: mM {init: 0.081078255, pub: out};
    var x_17: mM {init: 36.32137097, pub: out};
    var x_18: mM {init: 0.133832653, pub: out};
    var x_21: mM {init: 1.503, pub: out};
    var x_22: mM {init: 0.08671, pub: out};
    var x_23: mM {init: 1, pub: out};
    var x_24: mM {init: 0.223865529, pub: out};
    var x_25: mM {init: 1.604207403, pub: out};
    var x_29: mM {init: 0.985981656, pub: out};
    var x_30: mM {init: 0, pub: out};
    var x_31: mM {init: 0.050093968, pub: out};
    var x_32: mM {init: 0.020212786, pub: out};
    var x_33: mM {init: 0.456977678, pub: out};
    var x_36: mM {init: 0.535655056, pub: out};
    var x_45: mM {init: 0.010026905, pub: out};
    var x_46: mM {init: 0.022824551, pub: out};
    var x_47: mM {init: 0.014453927, pub: out};
    var x_48: mM {init: 0.005698838, pub: out};
    var x_49: mM {init: 2.597164579, pub: out};
    var x_50: mM {init: 0.027610082, pub: out};
    var x_51: mM {init: 0.76828054, pub: out};
    var x_55: mM {init: 1.103267726, pub: out};
    var x_57: mM {init: 0.111300101, pub: out};
    var x_60: mM {init: 0.223216643, pub: out};
    var x_62: mM {init: 0.966352867, pub: out};
    var x_63: mM {init: 0.537277269, pub: out};
    var x_64: mM {init: 0.770064975, pub: out};
    var x_66: mM {init: 0, pub: out};
    var x_68: mM {init: 0.027610082, pub: out};
    var x_69: mM {init: 0, pub: out};
    var x_72: mM {init: 0.079456041, pub: out};
    var x_74: mM {init: 0.004407555, pub: out};
    var x_77: mM {init: 0.027610082, pub: out};
    var time: second {pub: in};
    var r_01: mmol_per_second {pub: in};
    var r_02: mmol_per_second {pub: in};
    var r_03: mmol_per_second {pub: in};
    var r_04: mmol_per_second {pub: in};
    var r_05: mmol_per_second {pub: in};
    var r_06: mmol_per_second {pub: in};
    var r_07: mmol_per_second {pub: in};
    var r_08: mmol_per_second {pub: in};
    var r_09: mmol_per_second {pub: in};
    var r_10: mmol_per_second {pub: in};
    var r_11: mmol_per_second {pub: in};
    var r_12: mmol_per_second {pub: in};
    var r_13: mmol_per_second {pub: in};
    var r_14: mmol_per_second {pub: in};
    var r_15: mmol_per_second {pub: in};
    var r_16: mmol_per_second {pub: in};
    var r_17: mmol_per_second {pub: in};
    var r_18: mmol_per_second {pub: in};
    var r_19: mmol_per_second {pub: in};
    var r_20: mmol_per_second {pub: in};
    var r_21: mmol_per_second {pub: in};
    var r_22: mmol_per_second {pub: in};
    var r_23: mmol_per_second {pub: in};
    var r_24: mmol_per_second {pub: in};
    var r_25: mmol_per_second {pub: in};
    var r_26: mmol_per_second {pub: in};
    var r_27: mmol_per_second {pub: in};
    var r_28: mmol_per_second {pub: in};
    var r_29: mmol_per_second {pub: in};
    var r_30: mmol_per_second {pub: in};
    var r_31: mmol_per_second {pub: in};
    ode(x_01, time) = (r_24-r_25)/c_1;
    ode(x_02, time) = (r_14+r_15+r_16-r_24)/c_1;
    ode(x_03, time) = (r_05+r_26+r_27+r_28-r_02-r_03-r_04)/c_1;
    ode(x_04, time) = (2{dimensionless}*r_01+r_06+r_19+r_20+r_21+r_23-r_24-r_29-r_30)/c_1;
    ode(x_05, time) = -r_01/c_1;
    ode(x_06, time) = (r_24+r_29+r_30-r_01-r_06-r_19-r_20-r_21-r_23)/c_1;
    ode(x_08, time) = (r_23-r_11)/c_1;
    ode(x_09, time) = 0{mM_per_second};
    ode(x_10, time) = (r_13-r_23)/c_1;
    ode(x_11, time) = (r_12-r_19-r_20-r_21)/c_1;
    ode(x_12, time) = (r_19+r_20+r_21-r_13)/c_1;
    ode(x_13, time) = (r_25-r_08-r_09)/c_1;
    ode(x_14, time) = (r_11-r_18-r_31)/c_1;
    ode(x_15, time) = (r_02+r_03+r_04-r_05-r_10)/c_1;
    ode(x_16, time) = (r_11+r_31-r_14-r_15-r_16)/c_1;
    ode(x_17, time) = 0{mM_per_second};
    ode(x_18, time) = (r_18-r_17)/c_1;
    ode(x_21, time) = (r_02+r_03+r_04+r_18+r_22-r_05-r_14-r_15-r_16)/c_1;
    ode(x_22, time) = (r_05+r_14+r_15+r_16-r_02-r_03-r_04-r_18-r_22)/c_1;
    ode(x_23, time) = 0{mM_per_second};
    ode(x_24, time) = (r_08+r_09-r_29-r_30)/c_1;
    ode(x_25, time) = (r_29+r_30-r_07-r_26-r_27-r_28)/c_1;
    ode(x_29, time) = 0{mM_per_second};
    ode(x_30, time) = 0{mM_per_second};
    ode(x_31, time) = 0{mM_per_second};
    ode(x_32, time) = 0{mM_per_second};
    ode(x_33, time) = 0{mM_per_second};
    ode(x_36, time) = 0{mM_per_second};
    ode(x_45, time) = 0{mM_per_second};
    ode(x_46, time) = 0{mM_per_second};
    ode(x_47, time) = 0{mM_per_second};
    ode(x_48, time) = 0{mM_per_second};
    ode(x_49, time) = 0{mM_per_second};
    ode(x_50, time) = 0{mM_per_second};
    ode(x_51, time) = 0{mM_per_second};
    ode(x_55, time) = 0{mM_per_second};
    ode(x_57, time) = 0{mM_per_second};
    ode(x_60, time) = 0{mM_per_second};
    ode(x_62, time) = 0{mM_per_second};
    ode(x_63, time) = 0{mM_per_second};
    ode(x_64, time) = 0{mM_per_second};
    ode(x_66, time) = 0{mM_per_second};
    ode(x_68, time) = 0{mM_per_second};
    ode(x_69, time) = 0{mM_per_second};
    ode(x_72, time) = 0{mM_per_second};
    ode(x_74, time) = 0{mM_per_second};
    ode(x_77, time) = 0{mM_per_second};
  enddef;

  def comp extracellular as
    var size: litre {init: 1, pub: out};
    var x_26: mM {init: 51.11, pub: out};
    var time: second {pub: in};
    ode(x_26, time) = 0{mM_per_second};
  enddef;

  def comp plasma_membrane as
    var size: litre {init: 4.6979e-15, pub: out};
  enddef;

  def comp r_01 as
    var r_01: mmol_per_second {pub: out};
    var k: per_mM_per_second {init: 1.667};
    var Keq: dimensionless {init: 0.45};
    var c_1: litre {pub: in};
    var x_04: mM {pub: in};
    var x_05: mM {pub: in};
    var x_06: mM {pub: in};
    r_01 = c_1*k*(x_06*x_05-x_04*x_04/Keq);
  enddef;

  def comp r_02 as
    var r_02: mmol_per_second {pub: out};
    var Kacald_adh: mM {pub: in};
    var Keq_adh: dimensionless {pub: in};
    var Ketoh_adh: mM {pub: in};
    var Knad_adh: mM {pub: in};
    var Knadh_adh: mM {pub: in};
    var Kiacald_adh: mM {pub: in};
    var Kietoh_adh: mM {pub: in};
    var Kinad_adh: mM {pub: in};
    var Kinadh_adh: mM {pub: in};
    var kcat_adh: per_second {pub: in};
    var c_1: litre {pub: in};
    var x_03: mM {pub: in};
    var x_15: mM {pub: in};
    var x_21: mM {pub: in};
    var x_22: mM {pub: in};
    var x_47: mM {pub: in};
    r_02 = c_1*(-x_47)*kcat_adh*(x_15*x_21/(Ketoh_adh*Kinad_adh)-x_03*x_22/(Ketoh_adh*Kinad_adh*Keq_adh))/(1{dimensionless}+x_21/Kinad_adh+x_15*Knad_adh/(Kinad_adh*Ketoh_adh)+x_03*Knadh_adh/(Kinadh_adh*Kacald_adh)+x_22/Kinadh_adh+x_15*x_21/(Kinad_adh*Ketoh_adh)+x_21*x_03*Knadh_adh/(Kinad_adh*Kinadh_adh*Kacald_adh)+x_15*x_22*Knad_adh/(Kinad_adh*Kinadh_adh*Ketoh_adh)+x_03*x_22/(Kacald_adh*Kinadh_adh)+x_15*x_21*x_03/(Kinad_adh*Kiacald_adh*Ketoh_adh)+x_15*x_03*x_22/(Kietoh_adh*Kinadh_adh*Kacald_adh));
  enddef;

  def comp r_03 as
    var r_03: mmol_per_second {pub: out};
    var Kacald_adh: mM {pub: in};
    var Keq_adh: dimensionless {pub: in};
    var Ketoh_adh: mM {pub: in};
    var Knad_adh: mM {pub: in};
    var Knadh_adh: mM {pub: in};
    var Kiacald_adh: mM {pub: in};
    var Kietoh_adh: mM {pub: in};
    var Kinad_adh: mM {pub: in};
    var Kinadh_adh: mM {pub: in};
    var kcat_adh: per_second {pub: in};
    var c_1: litre {pub: in};
    var x_03: mM {pub: in};
    var x_15: mM {pub: in};
    var x_21: mM {pub: in};
    var x_22: mM {pub: in};
    var x_30: mM {pub: in};
    r_03 = c_1*(-x_30)*kcat_adh*(x_15*x_21/(Ketoh_adh*Kinad_adh)-x_03*x_22/(Ketoh_adh*Kinad_adh*Keq_adh))/(1{dimensionless}+x_21/Kinad_adh+x_15*Knad_adh/(Kinad_adh*Ketoh_adh)+x_03*Knadh_adh/(Kinadh_adh*Kacald_adh)+x_22/Kinadh_adh+x_15*x_21/(Kinad_adh*Ketoh_adh)+x_21*x_03*Knadh_adh/(Kinad_adh*Kinadh_adh*Kacald_adh)+x_15*x_22*Knad_adh/(Kinad_adh*Kinadh_adh*Ketoh_adh)+x_03*x_22/(Kacald_adh*Kinadh_adh)+x_15*x_21*x_03/(Kinad_adh*Kiacald_adh*Ketoh_adh)+x_15*x_03*x_22/(Kietoh_adh*Kinadh_adh*Kacald_adh));
  enddef;

  def comp r_04 as
    var r_04: mmol_per_second {pub: out};
    var Kacald: mM {init: 0.4622};
    var Kacald_adh: mM {pub: in};
    var Keq_adh: dimensionless {pub: in};
    var Ketoh_adh: mM {pub: in};
    var Knad_adh: mM {pub: in};
    var Knadh_adh: mM {pub: in};
    var Kiacald_adh: mM {pub: in};
    var Kietoh_adh: mM {pub: in};
    var Kinad_adh: mM {pub: in};
    var Kinadh_adh: mM {pub: in};
    var kcat_adh: per_second {pub: in};
    var c_1: litre {pub: in};
    var x_03: mM {pub: in};
    var x_15: mM {pub: in};
    var x_21: mM {pub: in};
    var x_22: mM {pub: in};
    var x_72: mM {pub: in};
    r_04 = c_1*(-x_72)*kcat_adh*(x_15*x_21/(Ketoh_adh*Kinad_adh)-x_03*x_22/(Ketoh_adh*Kinad_adh*Keq_adh))/(1{dimensionless}+x_21/Kinad_adh+x_15*Knad_adh/(Kinad_adh*Ketoh_adh)+x_03*Knadh_adh/(Kinadh_adh*Kacald)+x_22/Kinadh_adh+x_15*x_21/(Kinad_adh*Ketoh_adh)+x_21*x_03*Knadh_adh/(Kinad_adh*Kinadh_adh*Kacald)+x_15*x_22*Knad_adh/(Kinad_adh*Kinadh_adh*Ketoh_adh)+x_03*x_22/(Kacald*Kinadh_adh)+x_15*x_21*x_03/(Kinad_adh*Kiacald_adh*Ketoh_adh)+x_15*x_03*x_22/(Kietoh_adh*Kinadh_adh*Kacald));
  enddef;

  def comp r_05 as
    var r_05: mmol_per_second {pub: out};
    r_05 = 0{mmol_per_second};
  enddef;

  def comp r_06 as
    var r_06: mmol_per_second {pub: out};
    var k: per_second {init: 0.4011};
    var c_1: litre {pub: in};
    var x_06: mM {pub: in};
    r_06 = c_1*k*x_06;
  enddef;

  def comp r_07 as
    var r_07: mmol_per_second {pub: out};
    var k: per_second {init: 0.319};
    var c_1: litre {pub: in};
    var x_25: mM {pub: in};
    r_07 = c_1*k*x_25;
  enddef;

  def comp r_08 as
    var r_08: mmol_per_second {pub: out};
    r_08 = 0{mmol_per_second};
  enddef;

  def comp r_09 as
    var r_09: mmol_per_second {pub: out};
    var kcat: per_second {init: 26.5};
    var Kp2g: mM {init: 0.066};
    var Keq: dimensionless {init: 6.7};
    var Kpep: mM {init: 0.5};
    var c_1: litre {pub: in};
    var x_13: mM {pub: in};
    var x_24: mM {pub: in};
    var x_51: mM {pub: in};
    r_09 = c_1*x_51*kcat*(x_13/Kp2g-x_24/(Kp2g*Keq))/(1{dimensionless}+x_13/Kp2g+x_24/Kpep);
  enddef;

  def comp r_10 as
    var r_10: mmol_per_second {pub: out};
    var k: per_second {init: 0.01384};
    var c_1: litre {pub: in};
    var x_15: mM {pub: in};
    r_10 = c_1*k*x_15;
  enddef;

  def comp r_11 as
    var r_11: mmol_per_second {pub: out};
    var kcat: per_second {init: 4.139};
    var Kf16bp: mM {init: 0.4507};
    var Kdhap: mM {init: 2};
    var Kgap: mM {init: 2.4};
    var Kigap: mM {init: 10};
    var Keq: mM {init: 0.069};
    var c_1: litre {pub: in};
    var x_08: mM {pub: in};
    var x_14: mM {pub: in};
    var x_16: mM {pub: in};
    var x_62: mM {pub: in};
    r_11 = c_1*x_62*kcat*(x_08/Kf16bp-x_14*x_16/(Kf16bp*Keq))/(1{dimensionless}+x_08/Kf16bp+x_14/Kdhap+x_16/Kgap+x_08*x_16/(Kf16bp*Kigap)+x_14*x_16/(Kdhap*Kgap));
  enddef;

  def comp r_12 as
    var r_12: mmol_per_second {pub: out};
    var Vmax: mM_per_second {init: 3.774};
    var Kglc: mM {init: 1.192};
    var Ki: dimensionless {init: 0.91};
    var c_1: litre {pub: in};
    var x_11: mM {pub: in};
    var x_26: mM {pub: in};
    r_12 = c_1*Vmax*(x_26-x_11)/Kglc/(1{dimensionless}+x_26/Kglc+x_11/Kglc+Ki*x_26/Kglc*x_11/Kglc);
  enddef;

  def comp r_13 as
    var r_13: mmol_per_second {pub: out};
    var kcat: per_second {init: 487.4};
    var Kg6p: mM {init: 1.03};
    var Kf6p: mM {init: 0.307};
    var Keq: dimensionless {init: 0.29};
    var c_1: litre {pub: in};
    var x_10: mM {pub: in};
    var x_12: mM {pub: in};
    var x_31: mM {pub: in};
    r_13 = c_1*x_31*kcat*(x_12/Kg6p-x_10/(Kg6p*Keq))/(1{dimensionless}+x_12/Kg6p+x_10/Kf6p);
  enddef;

  def comp r_14 as
    var r_14: mmol_per_second {pub: out};
    var kcat: per_second {init: 19.12};
    var Kgap: mM {init: 0.495};
    var Kbpg_tdh: mM {pub: in};
    var Keq_tdh: dimensionless {pub: in};
    var Knad_tdh: mM {pub: in};
    var Knadh_tdh: mM {pub: in};
    var c_1: litre {pub: in};
    var x_02: mM {pub: in};
    var x_16: mM {pub: in};
    var x_21: mM {pub: in};
    var x_22: mM {pub: in};
    var x_57: mM {pub: in};
    r_14 = c_1*x_57*kcat*(x_16*x_21/(Kgap*Knad_tdh)-x_02*x_22/(Kgap*Knad_tdh*Keq_tdh))/((1{dimensionless}+x_16/Kgap+x_02/Kbpg_tdh)*(1{dimensionless}+x_21/Knad_tdh+x_22/Knadh_tdh));
  enddef;

  def comp r_15 as
    var r_15: mmol_per_second {pub: out};
    var kcat: per_second {init: 18.16};
    var Kgap: mM {init: 0.423};
    var Kbpg: mM {init: 0.909};
    var Kbpg_tdh: mM {pub: in};
    var Keq_tdh: dimensionless {pub: in};
    var Knad_tdh: mM {pub: in};
    var Knadh_tdh: mM {pub: in};
    var c_1: litre {pub: in};
    var x_02: mM {pub: in};
    var x_16: mM {pub: in};
    var x_21: mM {pub: in};
    var x_22: mM {pub: in};
    var x_49: mM {pub: in};
    r_15 = c_1*x_49*kcat*(x_16*x_21/(Kgap*Knad_tdh)-x_02*x_22/(Kgap*Knad_tdh*Keq_tdh))/((1{dimensionless}+x_16/Kgap+x_02/Kbpg)*(1{dimensionless}+x_21/Knad_tdh+x_22/Knadh_tdh));
  enddef;

  def comp r_16 as
    var r_16: mmol_per_second {pub: out};
    var kcat: per_second {init: 15.58};
    var Kgap: mM {init: 0.21};
    var Kbpg_tdh: mM {pub: in};
    var Keq_tdh: dimensionless {pub: in};
    var Knad_tdh: mM {pub: in};
    var Knadh_tdh: mM {pub: in};
    var c_1: litre {pub: in};
    var x_02: mM {pub: in};
    var x_16: mM {pub: in};
    var x_21: mM {pub: in};
    var x_22: mM {pub: in};
    var x_60: mM {pub: in};
    r_16 = c_1*x_60*kcat*(x_16*x_21/(Kgap*Knad_tdh)-x_02*x_22/(Kgap*Knad_tdh*Keq_tdh))/((1{dimensionless}+x_16/Kgap+x_02/Kbpg_tdh)*(1{dimensionless}+x_21/Knad_tdh+x_22/Knadh_tdh));
  enddef;

  def comp r_17 as
    var r_17: mmol_per_second {pub: out};
    var Vmax: mM_per_second {init: 13.54};
    var Kg3p: mM {init: 3.5};
    var Kphi: mM {init: 1};
    var c_1: litre {pub: in};
    var x_18: mM {pub: in};
    var x_23: mM {pub: in};
    r_17 = c_1*Vmax*x_18/Kg3p/((1{dimensionless}+x_18/Kg3p)*(1{dimensionless}+x_23/Kphi));
  enddef;

  def comp r_18 as
    var r_18: mmol_per_second {pub: out};
    var Vmax: mM_per_second {init: 5.282};
    var Knadh: mM {init: 0.023};
    var Kdhap: mM {init: 0.54};
    var Knad: mM {init: 0.93};
    var Kg3p: mM {init: 1.2};
    var Kf16bp: mM {init: 4.8};
    var Katp: mM {init: 0.73};
    var Kadp: mM {init: 2};
    var Keq: dimensionless {init: 10000};
    var c_1: litre {pub: in};
    var x_04: mM {pub: in};
    var x_06: mM {pub: in};
    var x_08: mM {pub: in};
    var x_14: mM {pub: in};
    var x_18: mM {pub: in};
    var x_21: mM {pub: in};
    var x_22: mM {pub: in};
    r_18 = c_1*Vmax/(Knadh*Kdhap)*(x_22*x_14-x_21*x_18/Keq)/((1{dimensionless}+x_08/Kf16bp+x_06/Katp+x_04/Kadp)*(1{dimensionless}+x_22/Knadh+x_21/Knad)*(1{dimensionless}+x_14/Kdhap+x_18/Kg3p));
  enddef;

  def comp r_19 as
    var r_19: mmol_per_second {pub: out};
    var kcat: per_second {init: 10.2};
    var Kglc: mM {init: 0.15};
    var Katp: mM {init: 0.293};
    var Kadp_hxk: mM {pub: in};
    var Keq_hxk: dimensionless {pub: in};
    var Kg6p_hxk: mM {pub: in};
    var c_1: litre {pub: in};
    var x_04: mM {pub: in};
    var x_06: mM {pub: in};
    var x_11: mM {pub: in};
    var x_12: mM {pub: in};
    var x_45: mM {pub: in};
    r_19 = c_1*x_45*kcat*(x_11*x_06/(Kglc*Katp)-x_12*x_04/(Kglc*Katp*Keq_hxk))/((1{dimensionless}+x_11/Kglc+x_12/Kg6p_hxk)*(1{dimensionless}+x_06/Katp+x_04/Kadp_hxk));
  enddef;

  def comp r_20 as
    var r_20: mmol_per_second {pub: out};
    var kcat: per_second {init: 0.0721};
    var Kglc: mM {init: 0.0106};
    var Katp: mM {init: 0.865};
    var Kadp_hxk: mM {pub: in};
    var Keq_hxk: dimensionless {pub: in};
    var Kg6p_hxk: mM {pub: in};
    var c_1: litre {pub: in};
    var x_04: mM {pub: in};
    var x_06: mM {pub: in};
    var x_11: mM {pub: in};
    var x_12: mM {pub: in};
    var x_32: mM {pub: in};
    r_20 = c_1*x_32*kcat*(x_11*x_06/(Kglc*Katp)-x_12*x_04/(Kglc*Katp*Keq_hxk))/((1{dimensionless}+x_11/Kglc+x_12/Kg6p_hxk)*(1{dimensionless}+x_06/Katp+x_04/Kadp_hxk));
  enddef;

  def comp r_21 as
    var r_21: mmol_per_second {pub: out};
    var kcat: per_second {init: 63.1};
    var Kglc: mM {init: 0.2};
    var Katp: mM {init: 0.195};
    var Kadp_hxk: mM {pub: in};
    var Keq_hxk: dimensionless {pub: in};
    var Kg6p_hxk: mM {pub: in};
    var c_1: litre {pub: in};
    var x_04: mM {pub: in};
    var x_06: mM {pub: in};
    var x_11: mM {pub: in};
    var x_12: mM {pub: in};
    var x_46: mM {pub: in};
    r_21 = c_1*x_46*kcat*(x_11*x_06/(Kglc*Katp)-x_12*x_04/(Kglc*Katp*Keq_hxk))/((1{dimensionless}+x_11/Kglc+x_12/Kg6p_hxk)*(1{dimensionless}+x_06/Katp+x_04/Kadp_hxk));
  enddef;

  def comp r_22 as
    var r_22: mmol_per_second {pub: out};
    var k: per_second {init: 3.025};
    var c_1: litre {pub: in};
    var x_22: mM {pub: in};
    r_22 = c_1*k*x_22;
  enddef;

  def comp r_23 as
    var r_23: mmol_per_second {pub: out};
    var kcat: per_second {init: 117};
    var gR: dimensionless {init: 5.12};
    var Kf6p: mM {init: 0.438};
    var Katp: mM {init: 0.008};
    var L0: dimensionless {init: 0.66};
    var Ciatp: dimensionless {init: 100};
    var Kiatp: mM {init: 0.65};
    var Camp: dimensionless {init: 0.0845};
    var Kamp: mM {init: 0.0995};
    var Cf26: dimensionless {init: 0.0174};
    var Kf26: mM {init: 6.824e-5};
    var Cf16: dimensionless {init: 0.397};
    var Kf16: mM {init: 0.111};
    var Catp: dimensionless {init: 3};
    var c_1: litre {pub: in};
    var x_05: mM {pub: in};
    var x_06: mM {pub: in};
    var x_08: mM {pub: in};
    var x_09: mM {pub: in};
    var x_10: mM {pub: in};
    var x_77: mM {pub: in};
    r_23 = c_1*x_77*kcat*gR*x_10/Kf6p*x_06/Katp*(1{dimensionless}+x_10/Kf6p+x_06/Katp+gR*x_10/Kf6p*x_06/Katp)/(sqr(1{dimensionless}+x_10/Kf6p+x_06/Katp+gR*x_10/Kf6p*x_06/Katp)+L0*sqr((1{dimensionless}+Ciatp*x_06/Kiatp)/(1{dimensionless}+x_06/Kiatp))*sqr((1{dimensionless}+Camp*x_05/Kamp)/(1{dimensionless}+x_05/Kamp))*sqr((1{dimensionless}+Cf26*x_09/Kf26+Cf16*x_08/Kf16)/(1{dimensionless}+x_09/Kf26+x_08/Kf16))*sqr(1{dimensionless}+Catp*x_06/Katp));
  enddef;

  def comp r_24 as
    var r_24: mmol_per_second {pub: out};
    var kcat: per_second {init: 58.85};
    var Kbpg: mM {init: 0.003};
    var Kadp: mM {init: 1.99};
    var Kp3g: mM {init: 4.58};
    var Katp: mM {init: 3.536};
    var Keq: dimensionless {init: 3200};
    var nHadp: dimensionless {init: 2};
    var c_1: litre {pub: in};
    var x_01: mM {pub: in};
    var x_02: mM {pub: in};
    var x_04: mM {pub: in};
    var x_06: mM {pub: in};
    var x_33: mM {pub: in};
    r_24 = c_1*x_33*kcat*pow(x_04/Kadp, nHadp-1{dimensionless})*(x_02*x_04/(Kbpg*Kadp)-x_01*x_06/(Kbpg*Kadp*Keq))/((1{dimensionless}+x_02/Kbpg+x_01/Kp3g)*(1{dimensionless}+pow(x_04/Kadp, nHadp)+x_06/Katp));
  enddef;

  def comp r_25 as
    var r_25: mmol_per_second {pub: out};
    var kcat: per_second {init: 66.61};
    var Kp3g: mM {init: 0.681};
    var Keq_gpm: dimensionless {pub: in};
    var Kp2g_gpm: mM {pub: in};
    var c_1: litre {pub: in};
    var x_01: mM {pub: in};
    var x_13: mM {pub: in};
    var x_63: mM {pub: in};
    r_25 = c_1*x_63*kcat*(x_01/Kp3g-x_13/(Kp3g*Keq_gpm))/(1{dimensionless}+x_01/Kp3g+x_13/Kp2g_gpm);
  enddef;

  def comp r_26 as
    var r_26: mmol_per_second {pub: out};
    var kcat: per_second {init: 1.776};
    var Kpyr: mM {init: 11.44};
    var c_1: litre {pub: in};
    var x_25: mM {pub: in};
    var x_66: mM {pub: in};
    r_26 = c_1*x_66*kcat*x_25/Kpyr/(1{dimensionless}+x_25/Kpyr);
  enddef;

  def comp r_27 as
    var r_27: mmol_per_second {pub: out};
    var kcat: per_second {init: 12.07};
    var Kpyr: mM {init: 8.331};
    var c_1: litre {pub: in};
    var x_25: mM {pub: in};
    var x_64: mM {pub: in};
    r_27 = c_1*x_64*kcat*x_25/Kpyr/(1{dimensionless}+x_25/Kpyr);
  enddef;

  def comp r_28 as
    var r_28: mmol_per_second {pub: out};
    r_28 = 0{mmol_per_second};
  enddef;

  def comp r_29 as
    var r_29: mmol_per_second {pub: out};
    r_29 = 0{mmol_per_second};
  enddef;

  def comp r_30 as
    var r_30: mmol_per_second {pub: out};
    var kcat: per_second {init: 20.13};
    var Kpep: mM {init: 0.281};
    var Kadp: mM {init: 0.243};
    var Keq_pyk: dimensionless {init: 6500};
    var Kpyr_pyk: mM {init: 0.6517};
    var Katp_pyk: mM {pub: in};
    var c_1: litre {pub: in};
    var x_04: mM {pub: in};
    var x_06: mM {pub: in};
    var x_24: mM {pub: in};
    var x_25: mM {pub: in};
    var x_29: mM {pub: in};
    r_30 = c_1*x_29*kcat*(x_24*x_04/(Kpep*Kadp)-x_25*x_06/(Kpep*Kadp*Keq_pyk))/((1{dimensionless}+x_24/Kpep+x_25/Kpyr_pyk)*(1{dimensionless}+x_04/Kadp+x_06/Katp_pyk));
  enddef;

  def comp r_31 as
    var r_31: mmol_per_second {pub: out};
    var Keq: dimensionless {init: 0.0772};
    var kcat: per_second {init: 556.7};
    var Kdhap: mM {init: 6.454};
    var Kgap: mM {init: 5.25};
    var Kigap: mM {init: 35.1};
    var c_1: litre {pub: in};
    var x_14: mM {pub: in};
    var x_16: mM {pub: in};
    var x_36: mM {pub: in};
    r_31 = c_1*x_36*kcat/Kdhap*(x_14-x_16/Keq)/(1{dimensionless}+x_14/Kdhap+x_16/Kgap*(1{dimensionless}+pow(x_16/Kigap, 4{dimensionless})));
  enddef;
  def map between environment and cytoplasm for
    vars time and time;
  enddef;
  def map between environment and extracellular for
    vars time and time;
  enddef;
  def map between r_01 and cytoplasm for
    vars c_1 and c_1;
    vars r_01 and r_01;
    vars x_04 and x_04;
    vars x_05 and x_05;
    vars x_06 and x_06;
  enddef;
  def map between r_02 and parameters for
    vars Kacald_adh and Kacald_adh;
    vars Keq_adh and Keq_adh;
    vars Ketoh_adh and Ketoh_adh;
    vars Knad_adh and Knad_adh;
    vars Knadh_adh and Knadh_adh;
    vars Kiacald_adh and Kiacald_adh;
    vars Kietoh_adh and Kietoh_adh;
    vars Kinad_adh and Kinad_adh;
    vars Kinadh_adh and Kinadh_adh;
    vars kcat_adh and kcat_adh;
  enddef;
  def map between r_02 and cytoplasm for
    vars c_1 and c_1;
    vars r_02 and r_02;
    vars x_03 and x_03;
    vars x_15 and x_15;
    vars x_21 and x_21;
    vars x_22 and x_22;
    vars x_47 and x_47;
  enddef;
  def map between r_03 and parameters for
    vars Kacald_adh and Kacald_adh;
    vars Keq_adh and Keq_adh;
    vars Ketoh_adh and Ketoh_adh;
    vars Knad_adh and Knad_adh;
    vars Knadh_adh and Knadh_adh;
    vars Kiacald_adh and Kiacald_adh;
    vars Kietoh_adh and Kietoh_adh;
    vars Kinad_adh and Kinad_adh;
    vars Kinadh_adh and Kinadh_adh;
    vars kcat_adh and kcat_adh;
  enddef;
  def map between r_03 and cytoplasm for
    vars c_1 and c_1;
    vars r_03 and r_03;
    vars x_03 and x_03;
    vars x_15 and x_15;
    vars x_21 and x_21;
    vars x_22 and x_22;
    vars x_30 and x_30;
  enddef;
  def map between r_04 and parameters for
    vars Kacald_adh and Kacald_adh;
    vars Keq_adh and Keq_adh;
    vars Ketoh_adh and Ketoh_adh;
    vars Knad_adh and Knad_adh;
    vars Knadh_adh and Knadh_adh;
    vars Kiacald_adh and Kiacald_adh;
    vars Kietoh_adh and Kietoh_adh;
    vars Kinad_adh and Kinad_adh;
    vars Kinadh_adh and Kinadh_adh;
    vars kcat_adh and kcat_adh;
  enddef;
  def map between r_04 and cytoplasm for
    vars c_1 and c_1;
    vars r_04 and r_04;
    vars x_03 and x_03;
    vars x_15 and x_15;
    vars x_21 and x_21;
    vars x_22 and x_22;
    vars x_72 and x_72;
  enddef;
  def map between r_05 and cytoplasm for
    vars r_05 and r_05;
  enddef;
  def map between r_06 and cytoplasm for
    vars c_1 and c_1;
    vars r_06 and r_06;
    vars x_06 and x_06;
  enddef;
  def map between r_07 and cytoplasm for
    vars c_1 and c_1;
    vars r_07 and r_07;
    vars x_25 and x_25;
  enddef;
  def map between r_08 and cytoplasm for
    vars r_08 and r_08;
  enddef;
  def map between r_09 and cytoplasm for
    vars c_1 and c_1;
    vars r_09 and r_09;
    vars x_13 and x_13;
    vars x_24 and x_24;
    vars x_51 and x_51;
  enddef;
  def map between r_10 and cytoplasm for
    vars c_1 and c_1;
    vars r_10 and r_10;
    vars x_15 and x_15;
  enddef;
  def map between r_11 and cytoplasm for
    vars c_1 and c_1;
    vars r_11 and r_11;
    vars x_08 and x_08;
    vars x_14 and x_14;
    vars x_16 and x_16;
    vars x_62 and x_62;
  enddef;
  def map between r_12 and cytoplasm for
    vars c_1 and c_1;
    vars r_12 and r_12;
    vars x_11 and x_11;
  enddef;
  def map between r_12 and extracellular for
    vars x_26 and x_26;
  enddef;
  def map between r_13 and cytoplasm for
    vars c_1 and c_1;
    vars r_13 and r_13;
    vars x_10 and x_10;
    vars x_12 and x_12;
    vars x_31 and x_31;
  enddef;
  def map between r_14 and parameters for
    vars Kbpg_tdh and Kbpg_tdh;
    vars Keq_tdh and Keq_tdh;
    vars Knad_tdh and Knad_tdh;
    vars Knadh_tdh and Knadh_tdh;
  enddef;
  def map between r_14 and cytoplasm for
    vars c_1 and c_1;
    vars r_14 and r_14;
    vars x_02 and x_02;
    vars x_16 and x_16;
    vars x_21 and x_21;
    vars x_22 and x_22;
    vars x_57 and x_57;
  enddef;
  def map between r_15 and parameters for
    vars Kbpg_tdh and Kbpg_tdh;
    vars Keq_tdh and Keq_tdh;
    vars Knad_tdh and Knad_tdh;
    vars Knadh_tdh and Knadh_tdh;
  enddef;
  def map between r_15 and cytoplasm for
    vars c_1 and c_1;
    vars r_15 and r_15;
    vars x_02 and x_02;
    vars x_16 and x_16;
    vars x_21 and x_21;
    vars x_22 and x_22;
    vars x_49 and x_49;
  enddef;
  def map between r_16 and parameters for
    vars Kbpg_tdh and Kbpg_tdh;
    vars Keq_tdh and Keq_tdh;
    vars Knad_tdh and Knad_tdh;
    vars Knadh_tdh and Knadh_tdh;
  enddef;
  def map between r_16 and cytoplasm for
    vars c_1 and c_1;
    vars r_16 and r_16;
    vars x_02 and x_02;
    vars x_16 and x_16;
    vars x_21 and x_21;
    vars x_22 and x_22;
    vars x_60 and x_60;
  enddef;
  def map between r_17 and cytoplasm for
    vars c_1 and c_1;
    vars r_17 and r_17;
    vars x_18 and x_18;
    vars x_23 and x_23;
  enddef;
  def map between r_18 and cytoplasm for
    vars c_1 and c_1;
    vars r_18 and r_18;
    vars x_04 and x_04;
    vars x_06 and x_06;
    vars x_08 and x_08;
    vars x_14 and x_14;
    vars x_18 and x_18;
    vars x_21 and x_21;
    vars x_22 and x_22;
  enddef;
  def map between r_19 and parameters for
    vars Kadp_hxk and Kadp_hxk;
    vars Keq_hxk and Keq_hxk;
    vars Kg6p_hxk and Kg6p_hxk;
  enddef;
  def map between r_19 and cytoplasm for
    vars c_1 and c_1;
    vars r_19 and r_19;
    vars x_04 and x_04;
    vars x_06 and x_06;
    vars x_11 and x_11;
    vars x_12 and x_12;
    vars x_45 and x_45;
  enddef;
  def map between r_20 and parameters for
    vars Kadp_hxk and Kadp_hxk;
    vars Keq_hxk and Keq_hxk;
    vars Kg6p_hxk and Kg6p_hxk;
  enddef;
  def map between r_20 and cytoplasm for
    vars c_1 and c_1;
    vars r_20 and r_20;
    vars x_04 and x_04;
    vars x_06 and x_06;
    vars x_11 and x_11;
    vars x_12 and x_12;
    vars x_32 and x_32;
  enddef;
  def map between r_21 and parameters for
    vars Kadp_hxk and Kadp_hxk;
    vars Keq_hxk and Keq_hxk;
    vars Kg6p_hxk and Kg6p_hxk;
  enddef;
  def map between r_21 and cytoplasm for
    vars c_1 and c_1;
    vars r_21 and r_21;
    vars x_04 and x_04;
    vars x_06 and x_06;
    vars x_11 and x_11;
    vars x_12 and x_12;
    vars x_46 and x_46;
  enddef;
  def map between r_22 and cytoplasm for
    vars c_1 and c_1;
    vars r_22 and r_22;
    vars x_22 and x_22;
  enddef;
  def map between r_23 and cytoplasm for
    vars c_1 and c_1;
    vars r_23 and r_23;
    vars x_05 and x_05;
    vars x_06 and x_06;
    vars x_08 and x_08;
    vars x_09 and x_09;
    vars x_10 and x_10;
    vars x_77 and x_77;
  enddef;
  def map between r_24 and cytoplasm for
    vars c_1 and c_1;
    vars r_24 and r_24;
    vars x_01 and x_01;
    vars x_02 and x_02;
    vars x_04 and x_04;
    vars x_06 and x_06;
    vars x_33 and x_33;
  enddef;
  def map between r_25 and parameters for
    vars Keq_gpm and Keq_gpm;
    vars Kp2g_gpm and Kp2g_gpm;
  enddef;
  def map between r_25 and cytoplasm for
    vars c_1 and c_1;
    vars r_25 and r_25;
    vars x_01 and x_01;
    vars x_13 and x_13;
    vars x_63 and x_63;
  enddef;
  def map between r_26 and cytoplasm for
    vars c_1 and c_1;
    vars r_26 and r_26;
    vars x_25 and x_25;
    vars x_66 and x_66;
  enddef;
  def map between r_27 and cytoplasm for
    vars c_1 and c_1;
    vars r_27 and r_27;
    vars x_25 and x_25;
    vars x_64 and x_64;
  enddef;
  def map between r_28 and cytoplasm for
    vars r_28 and r_28;
  enddef;
  def map between r_29 and cytoplasm for
    vars r_29 and r_29;
  enddef;
  def map between r_30 and parameters for
    vars Katp_pyk and Katp_pyk;
  enddef;
  def map between r_30 and cytoplasm for
    vars c_1 and c_1;
    vars r_30 and r_30;
    vars x_04 and x_04;
    vars x_06 and x_06;
    vars x_24 and x_24;
    vars x_25 and x_25;
    vars x_29 and x_29;
  enddef;
  def map between r_31 and cytoplasm for
    vars c_1 and c_1;
    vars r_31 and r_31;
    vars x_14 and x_14;
    vars x_16 and x_16;
    vars x_36 and x_36;
  enddef;
  // <bqs:Pubmed_id>18509469</bqs:Pubmed_id>
  // <dcterms:issued rdf:parseType="Resource">
  //           <dcterms:W3CDTF>2008-05-28</dcterms:W3CDTF>
  //         </dcterms:issued>
  //         <bqs:Journal rdf:parseType="Resource">
  //           <dc:title>PLoS</dc:title>
  //         </bqs:Journal>
  //         <bqs:volume>3</bqs:volume>
  //         <bqs:first_page>e2249</bqs:first_page>
enddef;
