<?xml version="1.0"?>
<!--  FILE :  colegrove_model_2000.xml

CREATED :  21st March 2002

LAST MODIFIED : 9th April 2003

AUTHOR :  Catherine Lloyd
          Bioengineering Institute
          The University of Auckland
          
MODEL STATUS :  This model conforms to the CellML 1.0 Specification released on
10th August 2001, and the 16/1/02 CellML Metadata 1.0 Specification.

DESCRIPTION :  This file contains a CellML description of Colegrove et al's
2000 model of mitochondrial Ca2+ uptake and release pathways in sympathetic neurons.

CHANGES:  
  18/07/2002 - CML - Added more metadata.
  28/03/2003 - AAC - Changed the name and cmeta:id of the model to reflect the 
                     proper spelling of Colegrove.
  09/04/2003 - AAC - Added publication date information.  
--><model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" cmeta:id="colegrove_albrecht_friel_2000_version01" name="colegrove_albrecht_friel_2000_version01">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Quantitative Analysis Of Mitochondrial Ca2+ Uptake And Release Pathways In Sympathetic Neurons</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This model can not be solved as it is unsuitably constrained.
          </para>
<para>
ValidateCellML verifies this model as valid CellML with consistent units.
</para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
One of the central goals in the study of calcium signalling is to understand the basis of [Ca<superscript>2+</superscript>] dynamics.  This is complicated by the fact that Ca<superscript>2+</superscript> is present in several membrane-bound intracellular compartments, each of which uses a distinct Ca<superscript>2+</superscript> transport system and the rate of Ca<superscript>2+</superscript> transport between these compartments can exhibit a complex non-linear dependence on free [Ca<superscript>2+</superscript>].
</para>

<para>
In their 2000 model, Stephen L. Colegrove, Meredith A. Albrecht and David D. Friel have studied how mitochondrial Ca<superscript>2+</superscript> transport contributes to the redistribution of intracellular Ca<superscript>2+</superscript> during and after depolarisation-evoked Ca<superscript>2+</superscript> entry in sympathetic neurons.  The total Ca<superscript>2+</superscript> flux during the recovery phase following membrane depolarisation was divided into three components (see <xref linkend="fig_cell_diagram"/> below): one representing net Ca<superscript>2+</superscript> extrusion across the plasma membrane (J<subscript>extru</subscript>), one representing mitochondrial Ca<superscript>2+</superscript> uptake via the uniporter (J<subscript>uni</subscript>) and one representing mitochondrial Ca<superscript>2+</superscript> release via the Na<superscript>+</superscript>/Ca<superscript>2+</superscript> exchanger (J<subscript>NaCa</subscript>).  This mathematical model has been translated into a CellML description which can be downloaded in various formats as described in <xref linkend="sec_download_this_model"/>.
</para>

<para>
The complete original paper reference is cited below:
</para>

<para>
Quantitative Analysis of Mitochondrial Ca<superscript>2+</superscript> Uptake and Release Pathways in Sympathetic Neurons  <emphasis>Reconstruction of the Recovery after Depolarisation-evoked [Ca<superscript>2+</superscript>] Elevations</emphasis>
          , Stephen L. Colegrove, Meredith A. Albrecht and David D. Friel, 2000, 
            <emphasis>The Journal Of General Physiology</emphasis>
          , 115, 371-388.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=10694264&amp;dopt=Abstract">PubMed ID: 10694264</ulink>  
</para>


<informalfigure float="0" id="fig_cell_diagram">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>cell schematic for the model</title>
    </objectinfo>
    <imagedata fileref="colegrove_2000.png"/>
  </imageobject>
</mediaobject>
<caption>Schematic of the model indicating Ca<superscript>2+</superscript> compartmentalization in the extracellular matrix, cytosol and the mitochondrial matrix and pathways for Ca<superscript>2+</superscript> ion movement between the compartments.</caption>
</informalfigure>

</sect1>
</article>
</documentation>
  
  
  <!--
    Below, we define some additional units for association with variables and
    constants within the model. The identifiers are fairly self-explanatory.
  -->
  
  <units name="per_second">
    <unit exponent="-1" units="second"/>
  </units>
  
  <units name="millivolt">
    <unit prefix="milli" units="volt"/>
  </units>
  
  <units name="micromolar">
    <unit prefix="micro" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  
  <units name="nanomolar">
    <unit prefix="nano" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  
  <units name="nanomolar_per_second">
    <unit units="nanomolar"/>
    <unit exponent="-1" units="second"/>
  </units>
  
  <units name="micromolar_per_second">
    <unit units="micromolar"/>
    <unit exponent="-1" units="second"/>
  </units>
  
  <units name="micro_litre">
    <unit prefix="micro" units="litre"/>
  </units>
  
  <!--
    The "environment" component is used to declare variables that are used by
    all or most of the other components, in this case just "time".
  -->
  <component name="environment">
    <variable name="time" public_interface="out" units="second"/>
  </component>
  
  <component name="Ca_extrusion_across_the_plasma_membrane">
    <variable name="J_pm" public_interface="out" units="nanomolar_per_second"/>
   
    <variable name="J_leak" units="nanomolar_per_second"/>
    <variable name="J_extru" units="nanomolar_per_second"/>
    <variable initial_value="0.00000037" name="k_leak" units="per_second"/>
    <variable initial_value="28.3" name="Vmax_extru" units="nanomolar_per_second"/>
    <variable initial_value="378.8" name="EC50_extru" units="nanomolar"/>
    <variable initial_value="1.8" name="n_extru" units="dimensionless"/>
    <variable initial_value="0.002" name="Ca_o" units="nanomolar"/>
   
    <variable name="Ca_i" public_interface="in" units="nanomolar"/>
    <variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="J_pm_calculation">
        <eq/>
        <ci> J_pm </ci>
        <apply>
          <plus/>
          <ci> J_leak </ci>
          <ci> J_extru </ci>
        </apply>
      </apply>
      
      <apply id="J_leak_calculation">
        <eq/>
        <ci> J_leak </ci>
        <apply>
          <times/>
          <ci> k_leak </ci>
          <apply>
            <minus/>
            <ci> Ca_i </ci>
            <ci> Ca_o </ci>
          </apply>
        </apply>
      </apply>
        
      <apply id="J_extru_calculation">
        <eq/>
        <ci> J_extru </ci>
        <apply>
          <divide/>
          <ci> Vmax_extru </ci>
          <apply>
            <plus/>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <power/>
              <apply>
                <divide/>
                <ci> EC50_extru </ci>
                <ci> Ca_i </ci>
              </apply>
              <ci> n_extru </ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
        
  <component name="mitochondrial_Ca_uptake">
    <variable name="J_uni" public_interface="out" units="nanomolar_per_second"/>
   
    <variable initial_value="75.9" name="kuni_max" units="per_second"/>
    <variable initial_value="10.0" name="EC50_uni" units="micromolar"/>
    <variable initial_value="2.0" name="n_uni" units="dimensionless"/>
   
    <variable name="Ca_i" public_interface="in" units="nanomolar"/>
    <variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="J_uni_calculation">
        <eq/>
        <ci> J_uni </ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci> kuni_max </ci>
            <ci> Ca_i </ci>
          </apply>
          <apply>
            <plus/>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <power/>
              <apply>
                <divide/>
                <ci> EC50_uni </ci>
                <ci> Ca_i </ci>
              </apply>
              <ci> n_uni </ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
  <component name="mitochondrial_Ca_release">
    <variable name="J_NaCa" public_interface="out" units="nanomolar_per_second"/>
    <variable name="Ca_inhibited_J_NaCa" public_interface="out" units="nanomolar_per_second"/>
    <variable name="J_mito" public_interface="out" units="nanomolar_per_second"/>
   
    <variable initial_value="-35.0" name="Vmax_NaCa" units="nanomolar_per_second"/>
    <variable initial_value="307.0" name="EC50_NaCa" units="nanomolar"/>
    <variable initial_value="6.0" name="n_inhib" units="dimensionless"/>
    <variable initial_value="500.0" name="k_inhib" units="nanomolar"/>
    <variable name="delta_Ca_i" units="dimensionless"/>
   
    <variable name="J_uni" public_interface="in" units="nanomolar_per_second"/>
    <variable name="Ca_i" public_interface="in" units="nanomolar"/>
    <variable name="Ca_m" public_interface="in" units="nanomolar"/>
    <variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="J_NaCa_calculation">
        <eq/>
        <ci> J_NaCa </ci>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci> Vmax_NaCa </ci>
          </apply>
          <apply>
            <plus/>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <divide/>
              <ci> EC50_NaCa </ci>
              <ci> Ca_m </ci>
            </apply>
          </apply>
        </apply>
      </apply>
      
      <apply id="Ca_inhibited_J_NaCa_calculation">
        <eq/>
        <ci> Ca_inhibited_J_NaCa </ci>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci> delta_Ca_i </ci>
              <ci> Vmax_NaCa </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <divide/>
              <ci> EC50_NaCa </ci>
              <ci> Ca_i </ci>
            </apply>
          </apply>
        </apply>
      </apply>
      
      <apply id="delta_Ca_i_calculation">
        <eq/>
        <ci> delta_Ca_i </ci>
        <apply>
          <minus/>
          <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
          <apply>
            <divide/>
            <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
            <apply>
              <minus/>
              <cn xmlns:cellml="http://www.cellml.org/cellml/1.0#" cellml:units="dimensionless"> 1.0 </cn>
              <apply>
                <power/>
                <apply>
                  <divide/>
                  <ci> k_inhib </ci>
                  <ci> Ca_i </ci>
                </apply>
                <ci> n_inhib </ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      
      <apply id="J_mito_calculation">
        <eq/>
        <ci> J_mito </ci>
        <apply>
          <plus/>
          <ci> J_uni </ci>
          <ci> J_NaCa </ci>
        </apply>
      </apply>
    </math>
  </component>
  
  <component name="intracellular_calcium">
    <variable initial_value="0.002" name="Ca_i" public_interface="out" units="nanomolar"/>
   
    <variable name="J_pm" public_interface="in" units="nanomolar_per_second"/>
    <variable name="J_mito" public_interface="in" units="nanomolar_per_second"/>
    <variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="Ca_i_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> Ca_i </ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <ci> J_pm </ci>
            <ci> J_mito </ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  
<component name="mitochondrial_calcium">
    
   <variable initial_value="50.0e-9" name="Ca_m" public_interface="out" units="nanomolar"/>
     
     <variable initial_value="2.0" name="gamma" units="dimensionless"/>
    
    <!-- <variable units="micro_litre" name="v_m"/>
     <variable units="dimensionless" name="k_m"/>
     <variable units="micro_litre" name="v_i"/>
    <variable units="dimensionless" name="k_i"/>
    <variable units="dimensionless" name="k_i"/> -->
     
     <variable name="J_mito" public_interface="in" units="nanomolar_per_second"/>
     <variable name="time" public_interface="in" units="second"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="Ca_m_diff_eq">
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci> time </ci>
          </bvar>
          <ci> Ca_m </ci>
        </apply>
        <apply>
          <divide/>
          <ci> J_mito </ci>
          <ci> gamma </ci>
        </apply>
      </apply>
    </math>
  </component>
  
  <connection>
    <map_components component_1="Ca_extrusion_across_the_plasma_membrane" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="mitochondrial_Ca_uptake" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="mitochondrial_Ca_release" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="intracellular_calcium" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  
  <connection>
    <map_components component_1="mitochondrial_calcium" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection> 
  
  <connection>
    <map_components component_1="Ca_extrusion_across_the_plasma_membrane" component_2="intracellular_calcium"/>
    <map_variables variable_1="J_pm" variable_2="J_pm"/>
    <map_variables variable_1="Ca_i" variable_2="Ca_i"/>
  </connection>
  
  <connection>
    <map_components component_1="mitochondrial_Ca_uptake" component_2="intracellular_calcium"/>
    <map_variables variable_1="Ca_i" variable_2="Ca_i"/>
  </connection>
  
  <connection>
    <map_components component_1="mitochondrial_Ca_uptake" component_2="mitochondrial_Ca_release"/>
    <map_variables variable_1="J_uni" variable_2="J_uni"/>
  </connection>
  
  <connection>
    <map_components component_1="mitochondrial_Ca_release" component_2="intracellular_calcium"/>
    <map_variables variable_1="J_mito" variable_2="J_mito"/>
    <map_variables variable_1="Ca_i" variable_2="Ca_i"/>
  </connection>
  
  <connection>
    <map_components component_1="mitochondrial_Ca_release" component_2="mitochondrial_calcium"/>
    <map_variables variable_1="Ca_m" variable_2="Ca_m"/>
    <map_variables variable_1="J_mito" variable_2="J_mito"/>
  </connection>
  



<rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"><rdf:Description rdf:about="rdf:#bfb5711f-98fe-41b1-a7f5-b66ea97b1158"><title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Journal of General Physiology</title></rdf:Description><rdf:Description rdf:about="rdf:#802dd7eb-eb02-41c5-9257-463e7a0dad2e"><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Autumn</Given><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Cuellar</Family><Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">A</Other></rdf:Description><rdf:Description rdf:about="rdf:#8ce5c17a-31d1-48ff-aea0-c097bbd775a5"><subject xmlns="http://purl.org/dc/elements/1.1/"><rdf:Description rdf:about="rdf:#43a3e122-5e9b-417b-bda6-b3ee4f612dc3"/></subject></rdf:Description><rdf:Description rdf:about="rdf:#7c904e32-a025-4122-9845-95fb0271af84"><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">David</Given><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Friel</Family><Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">D</Other></rdf:Description><rdf:Description rdf:about="rdf:#b3ddd6c1-6e66-4b28-b4d6-7bc22176f615"><creator xmlns="http://purl.org/dc/elements/1.1/"><rdf:Description rdf:about="rdf:#66e8815f-2d77-46f0-b46a-a2919d8eaa70"/></creator><title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">Quantitive Analysis of Mitochondrial Ca2+ Uptake and Release                     Pathways in Sympathetic Neurons Reconstruction of the Recovery after             Depolarisation-evoked [Ca2+] Elevations</title><issued xmlns="http://purl.org/dc/terms/"><rdf:Description rdf:about="rdf:#242b8f41-13f6-47c9-8cdb-0ac04f1218c5"/></issued><volume xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">115</volume><first_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">371</first_page><Journal xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:about="rdf:#bfb5711f-98fe-41b1-a7f5-b66ea97b1158"/></Journal><last_page xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">388</last_page></rdf:Description><rdf:Description rdf:about="rdf:#a0b71f90-a6f0-4e77-a32b-f0da24f372af"><rdf:value xml:lang="en">
          Added more metadata.
        </rdf:value><modified xmlns="http://purl.org/dc/terms/"><rdf:Description rdf:about="rdf:#08ffc2ef-27c5-4248-a828-d04361e115bd"/></modified><cmeta:modifier><rdf:Description rdf:about="rdf:#2a66c8f9-9a21-447b-b93f-9913e5dc832d"/></cmeta:modifier></rdf:Description><rdf:Description rdf:about="rdf:#fc2db557-dd0b-490c-baad-a7683648f363"><FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en"></FN></rdf:Description><rdf:Description rdf:about="rdf:#0943c8e3-046d-4980-b8c0-453d47a86270"><ORG xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:about="rdf:#7098e4e2-aabe-4389-9b2b-db65bfb38adf"/></ORG><EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:about="rdf:#2697f942-6764-4b30-aced-e281061d99d8"/></EMAIL><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:about="rdf:#f7f1a7a8-96f9-4b1e-b1b9-53e160951811"/></N></rdf:Description><rdf:Description rdf:about="rdf:#784a653d-0e35-4c93-acc2-91fc946a3d53"><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Meredith</Given><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Albrecht</Family><Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">A</Other></rdf:Description><rdf:Description rdf:about="rdf:#f4c255a9-864d-4a8d-a09a-e30f95033946"><rdf:value xml:lang="en">
          Changed the name and cmeta:id of the model to reflect the proper 
          spelling of Colegrove.
        </rdf:value><modified xmlns="http://purl.org/dc/terms/"><rdf:Description rdf:about="rdf:#bf0bc8c5-41da-41a8-9215-4b2d40657a05"/></modified><cmeta:modifier><rdf:Description rdf:about="rdf:#71687366-e5a3-455d-b9f0-9f31ef36fba4"/></cmeta:modifier></rdf:Description><rdf:Description rdf:about="rdf:#4c55cf6c-5bc2-4dfb-9333-cdcb363bdb54"><rdf:type><rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/></rdf:type><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:about="rdf:#7c904e32-a025-4122-9845-95fb0271af84"/></N></rdf:Description><rdf:Description rdf:about="rdf:#b671c6ec-e206-4c0b-a47e-b1c6ef27a87a"><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Catherine</Given><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Lloyd</Family><Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">May</Other></rdf:Description><rdf:Description rdf:about=""><publisher xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">The University of Auckland, Bioengineering Institute</publisher><cmeta:comment><rdf:Description rdf:about="rdf:#11e8d270-3a86-4123-b21c-a800cea9c670"/></cmeta:comment><created xmlns="http://purl.org/dc/terms/"><rdf:Description rdf:about="rdf:#032a2aa0-439a-4182-942e-0c335ed24852"/></created><creator xmlns="http://purl.org/dc/elements/1.1/"><rdf:Description rdf:about="rdf:#0943c8e3-046d-4980-b8c0-453d47a86270"/></creator><cmeta:modification><rdf:Description rdf:about="rdf:#299ece5d-3d77-4dd3-932e-aa5308a309da"/></cmeta:modification><cmeta:modification><rdf:Description rdf:about="rdf:#f4c255a9-864d-4a8d-a09a-e30f95033946"/></cmeta:modification><cmeta:modification><rdf:Description rdf:about="rdf:#18da788a-e335-4f23-b50e-64d019c06fa8"/></cmeta:modification><cmeta:modification><rdf:Description rdf:about="rdf:#a0b71f90-a6f0-4e77-a32b-f0da24f372af"/></cmeta:modification></rdf:Description><rdf:Description rdf:nodeID="n1"><rdf:first><rdf:Description rdf:nodeID="n2"/></rdf:first><rdf:rest><rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#nil"/></rdf:rest></rdf:Description><rdf:Description rdf:about="rdf:#66e8815f-2d77-46f0-b46a-a2919d8eaa70"><rdf:_1><rdf:Description rdf:about="rdf:#9f11eca5-e8ee-463d-a892-860bf0299d1d"/></rdf:_1><rdf:_2><rdf:Description rdf:about="rdf:#54804b41-fa52-4e5d-8d24-bf840a9363ad"/></rdf:_2><rdf:_3><rdf:Description rdf:about="rdf:#4c55cf6c-5bc2-4dfb-9333-cdcb363bdb54"/></rdf:_3><rdf:type><rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Seq"/></rdf:type></rdf:Description><rdf:Description rdf:about="rdf:#bf0bc8c5-41da-41a8-9215-4b2d40657a05"><W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2003-03-28</W3CDTF></rdf:Description><rdf:Description rdf:about="rdf:#fd12f9b8-0647-4332-ab69-e17e555a3ee9"><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Autumn</Given><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Cuellar</Family><Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">A</Other></rdf:Description><rdf:Description rdf:about="rdf:#11e8d270-3a86-4123-b21c-a800cea9c670"><rdf:value xml:lang="en"></rdf:value><creator xmlns="http://purl.org/dc/elements/1.1/"><rdf:Description rdf:about="rdf:#fc2db557-dd0b-490c-baad-a7683648f363"/></creator></rdf:Description><rdf:Description rdf:about="rdf:#bed2e8da-84d2-4bc6-aa8e-b5a2e52b070a"><rdf:value xml:lang="en">This is the CellML description of Colegrove et al's 2000 model of 
          mitochondrial Ca2+ uptake and release pathways in sympathetic neurons.</rdf:value><creator xmlns="http://purl.org/dc/elements/1.1/"><rdf:Description rdf:about="rdf:#60eb3f15-7edf-4ef7-8e03-18401794cc32"/></creator></rdf:Description><rdf:Description rdf:about="rdf:#2697f942-6764-4b30-aced-e281061d99d8"><rdf:value xml:lang="en">c.lloyd@auckland.ac.nz</rdf:value><rdf:type><rdf:Description rdf:about="http://imc.org/vCard/3.0#internet"/></rdf:type></rdf:Description><rdf:Description rdf:nodeID="n2"><pointDensity xmlns="http://www.cellml.org/metadata/simulation/1.0#nonstandard-" xml:lang="en">100000</pointDensity><endingValue xmlns="http://www.cellml.org/metadata/simulation/1.0#" xml:lang="en">1200</endingValue></rdf:Description><rdf:Description rdf:about="rdf:#9f11eca5-e8ee-463d-a892-860bf0299d1d"><rdf:type><rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/></rdf:type><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:about="rdf:#78c9959b-c942-483a-84f3-44c722b99fdc"/></N></rdf:Description><rdf:Description rdf:about="rdf:#032a2aa0-439a-4182-942e-0c335ed24852"><W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2002-03-21T00:00:00+00:00</W3CDTF></rdf:Description><rdf:Description rdf:about="rdf:#08ffc2ef-27c5-4248-a828-d04361e115bd"><W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2002-07-18</W3CDTF></rdf:Description><rdf:Description rdf:about="rdf:#54804b41-fa52-4e5d-8d24-bf840a9363ad"><rdf:type><rdf:Description rdf:about="http://www.cellml.org/bqs/1.0#Person"/></rdf:type><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:about="rdf:#784a653d-0e35-4c93-acc2-91fc946a3d53"/></N></rdf:Description><rdf:Description rdf:about="rdf:#a22098a3-902d-4bbf-a213-893e30baf099"><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">James</Given><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Lawson</Family><Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Richard</Other></rdf:Description><rdf:Description rdf:about="rdf:#60eb3f15-7edf-4ef7-8e03-18401794cc32"><FN xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Catherine Lloyd</FN></rdf:Description><rdf:Description rdf:about="rdf:#18da788a-e335-4f23-b50e-64d019c06fa8"><rdf:value xml:lang="en">updated curation status, removed reference link in documentation</rdf:value><modified xmlns="http://purl.org/dc/terms/"><rdf:Description rdf:about="rdf:#102b3c52-8a2c-4bc9-9e4d-0a6efe9e1407"/></modified><cmeta:modifier><rdf:Description rdf:about="rdf:#e212039e-54ca-40ff-a0c9-92262be24fe6"/></cmeta:modifier></rdf:Description><rdf:Description rdf:about="rdf:#e212039e-54ca-40ff-a0c9-92262be24fe6"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:about="rdf:#a22098a3-902d-4bbf-a213-893e30baf099"/></N></rdf:Description><rdf:Description rdf:about="rdf:#71687366-e5a3-455d-b9f0-9f31ef36fba4"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:about="rdf:#802dd7eb-eb02-41c5-9257-463e7a0dad2e"/></N></rdf:Description><rdf:Description rdf:about="rdf:#43a3e122-5e9b-417b-bda6-b3ee4f612dc3"><rdf:value><rdf:Description rdf:about="rdf:#c32af19e-6bc0-4535-b0e3-d355cba81348"/></rdf:value><subject_type xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">keyword</subject_type></rdf:Description><rdf:Description rdf:about="rdf:#2a66c8f9-9a21-447b-b93f-9913e5dc832d"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:about="rdf:#b671c6ec-e206-4c0b-a47e-b1c6ef27a87a"/></N></rdf:Description><rdf:Description rdf:about="#colegrove_albrecht_friel_2000_version01"><cmeta:comment><rdf:Description rdf:about="rdf:#bed2e8da-84d2-4bc6-aa8e-b5a2e52b070a"/></cmeta:comment><title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en">
        Quantitative analysis of mitochondrial Ca2+ uptake and release.
      </title><cmeta:bio_entity xml:lang="en">sympathetic neuron</cmeta:bio_entity><simulation xmlns="http://www.cellml.org/metadata/simulation/1.0#"><rdf:Description rdf:nodeID="n3"/></simulation><reference xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:about="rdf:#8ce5c17a-31d1-48ff-aea0-c097bbd775a5"/></reference><reference xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:about="rdf:#8ec08365-ffb0-477f-8fef-a9434b58fcf7"/></reference></rdf:Description><rdf:Description rdf:about="rdf:#8ec08365-ffb0-477f-8fef-a9434b58fcf7"><Pubmed_id xmlns="http://www.cellml.org/bqs/1.0#" xml:lang="en">10694264</Pubmed_id><JournalArticle xmlns="http://www.cellml.org/bqs/1.0#"><rdf:Description rdf:about="rdf:#b3ddd6c1-6e66-4b28-b4d6-7bc22176f615"/></JournalArticle></rdf:Description><rdf:Description rdf:about="rdf:#c32af19e-6bc0-4535-b0e3-d355cba81348"><rdf:_1 xml:lang="en">calcium dynamics</rdf:_1><rdf:_2 xml:lang="en">neuron</rdf:_2><rdf:_3 xml:lang="en">sympathetic</rdf:_3><rdf:_4 xml:lang="en">electrophysiology</rdf:_4><rdf:type><rdf:Description rdf:about="http://www.w3.org/1999/02/22-rdf-syntax-ns#Bag"/></rdf:type></rdf:Description><rdf:Description rdf:about="rdf:#7098e4e2-aabe-4389-9b2b-db65bfb38adf"><Orgname xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">The University of Auckland</Orgname><Orgunit xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">The Bioengineering Institute</Orgunit></rdf:Description><rdf:Description rdf:about="rdf:#f7f1a7a8-96f9-4b1e-b1b9-53e160951811"><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Catherine</Given><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Lloyd</Family><Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">May</Other></rdf:Description><rdf:Description rdf:about="rdf:#102b3c52-8a2c-4bc9-9e4d-0a6efe9e1407"><W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2009-06-05T15:33:47+12:00</W3CDTF></rdf:Description><rdf:Description rdf:about="rdf:#a6189788-adf5-4375-8624-99a5edb6bc8c"><N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#"><rdf:Description rdf:about="rdf:#fd12f9b8-0647-4332-ab69-e17e555a3ee9"/></N></rdf:Description><rdf:Description rdf:about="rdf:#78c9959b-c942-483a-84f3-44c722b99fdc"><Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Stephen</Given><Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">Colegrove</Family><Other xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en">L</Other></rdf:Description><rdf:Description rdf:nodeID="n3"><boundIntervals xmlns="http://www.cellml.org/metadata/simulation/1.0#"><rdf:Description rdf:nodeID="n1"/></boundIntervals></rdf:Description><rdf:Description rdf:about="rdf:#07d373b1-f2e7-4c01-8b08-3fde0f368b11"><W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2003-04-09</W3CDTF></rdf:Description><rdf:Description rdf:about="rdf:#299ece5d-3d77-4dd3-932e-aa5308a309da"><rdf:value xml:lang="en">
          Added publication date information.
        </rdf:value><modified xmlns="http://purl.org/dc/terms/"><rdf:Description rdf:about="rdf:#07d373b1-f2e7-4c01-8b08-3fde0f368b11"/></modified><cmeta:modifier><rdf:Description rdf:about="rdf:#a6189788-adf5-4375-8624-99a5edb6bc8c"/></cmeta:modifier></rdf:Description><rdf:Description rdf:about="rdf:#242b8f41-13f6-47c9-8cdb-0ac04f1218c5"><W3CDTF xmlns="http://purl.org/dc/terms/" xml:lang="en">2000-03</W3CDTF></rdf:Description></rdf:RDF></model>